def model Roesler2023 as
  // units
  def unit msec as
    unit second {pref: milli};
  enddef;
  def unit joule_per_kelvin_per_kilomole as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1, pref: kilo};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit liter {expo: -1};
  enddef;
  def unit nM_per_L as
    unit mole {pref: nano};
    unit liter {expo: -1};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_msec as
    unit mM;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit M_per_msec as
    unit mole;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit per_msec as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_mV as
    unit mV {expo: -1};
  enddef;
  def unit uF_per_cm2 as
    unit farad {pref: micro};
    unit meter {expo: -2, pref: centi};
  enddef;
  def unit cm2_per_uL as
    unit meter {expo: 2, pref: centi};
    unit liter {expo: -1, pref: micro};
  enddef;
  def unit nS_per_pF as
    unit siemens {pref: nano};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit pA_per_pF as
    unit ampere {pref: pico};
    unit farad {expo: -1, pref: pico};
  enddef;
  def unit nM as
    unit mole {pref: nano};
    unit liter {expo: -1};
  enddef;
  def unit uN as
    unit newton {pref: micro};
  enddef;
  def unit nM_to_mM as
    unit mM;
    unit nM {expo: -1};
  enddef;
  def unit mM_to_M as
    unit mole;
    unit mM {expo: -1};
  enddef;
  // Model - Time variable

  def comp environment as
    var time: msec {pub: out};
  enddef;
  // Model - membrane

  def comp membrane as
    var I_hold: pA_per_pF {init: 0, pub: none};
    var I_test: pA_per_pF {init: -0.25, pub: none};
    // DE -0.5; ME, PRO, E -0.2;
    var test_start: msec {init: 1000, pub: none};
    var test_end: msec {init: 11000, pub: none};
    // ME 11000; DE 6000; PRO 4000; E 4000;
    var I_stim: pA_per_pF;
    var time: msec {pub: in};
    var I_tot: pA_per_pF;
    var I_Ca_tot: pA_per_pF {pub: in};
    var I_NS_tot: pA_per_pF {pub: in};
    var I_K_tot: pA_per_pF {pub: in};
    var v: mV {init: -53.90915441282156, pub: out};
    var Cm: uF_per_cm2 {pub: in};
    var ina: pA_per_pF {pub: in};
    var ib: pA_per_pF {pub: in};
    var icl: pA_per_pF {pub: in};
    var P4: nM_per_L {init: 13, pub: out};
    // ME 20.5; DE 19.7; PRO 48; E 13;
    var E2: nM_per_L {init: 38, pub: out};
    // ME 50; DE 76; PRO 100; E 38;
    var P4_max: nM_per_L {init: 53, pub: out};
    var E2_max: nM_per_L {init: 140, pub: out};
    var E2_ratio: dimensionless {pub: out};
    var P4_ratio: dimensionless {pub: out};
    E2_ratio = E2/E2_max;
    P4_ratio = P4/P4_max;
    I_stim = sel
      case (time > test_start) and (time < test_end):
        I_test;
      otherwise:
        I_hold;
    endsel;
    I_tot = ina+icl+ib+I_Ca_tot+I_NS_tot+I_K_tot;
    ode(v, time) = -(I_tot+I_stim);
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between membrane and parameters for
    vars Cm and Cm;
    vars v and v;
  enddef;
  // Model - Cai variable

  def comp Ca_Concentrations as
    var J_tot: mM_per_msec;
    var J_Ca_mem: mM_per_msec;
    var cai: mM {init: 0.0001161881607214449, pub: out};
    var time: msec {pub: in};
    var jnaca: mM_per_msec {pub: in};
    var jpmca: mM_per_msec {pub: in};
    var I_Ca_tot: pA_per_pF {pub: in};
    var insca: pA_per_pF {pub: in};
    var buff: dimensionless {pub: in};
    var AV: cm2_per_uL {pub: in};
    var zca: dimensionless {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var jcamem_plot: M_per_msec;
    var jpmca_plot: M_per_msec;
    var jnaca_plot: M_per_msec;
    var conversion: mM_to_M {init: 1000, pub: none};
    J_Ca_mem = AV*Cm*buff/(zca*frdy)*(I_Ca_tot+insca);
    jcamem_plot = J_Ca_mem*conversion;
    jpmca_plot = jpmca*conversion;
    jnaca_plot = jnaca*conversion;
    J_tot = J_Ca_mem+jnaca+jpmca;
    ode(cai, time) = -J_tot;
  enddef;
  def map between Ca_Concentrations and environment for
    vars time and time;
  enddef;
  def map between Ca_Concentrations and Ca_currents for
    vars I_Ca_tot and I_Ca_tot;
  enddef;
  def map between Ca_Concentrations and NS_currents for
    vars insca and insca;
  enddef;
  def map between Ca_Concentrations and parameters for
    vars cai and cai;
    vars buff and buff;
    vars AV and AV;
    vars zca and zca;
    vars frdy and frdy;
    vars Cm and Cm;
  enddef;
  // Model - Parameters

  def comp parameters as
    var ki: mM {pub: out};
    var nai: mM {pub: out};
    var cli: mM {pub: out};
    var ko: mM {pub: out};
    var cao: mM {pub: out};
    var nao: mM {pub: out};
    var clo: mM {pub: out};
    var mgo: mM {pub: out};
    var buff: dimensionless {pub: out};
    var AV: cm2_per_uL {pub: out};
    var zca: dimensionless {pub: out};
    var zna: dimensionless {pub: out};
    var zk: dimensionless {pub: out};
    var R: joule_per_kelvin_per_kilomole {pub: out};
    var frdy: coulomb_per_mole {pub: out};
    var temp: kelvin {pub: out};
    var Cm: uF_per_cm2 {init: 1.0};
    var gna: nS_per_pF {init: 0.008, pub: out};
    var gcal: nS_per_pF {init: 0.17, pub: out};
    var ecal: mV {pub: out};
    var kmca: mM {pub: out};
    var gcat: nS_per_pF {init: 0.058, pub: out};
    var ecat: mV {pub: out};
    var gkca: nS_per_pF {init: 0.268, pub: out};
    var gb: nS_per_pF {init: 0.004, pub: out};
    var gkv43: nS_per_pF {init: 0.1, pub: out};
    var gkv42: nS_per_pF {init: 0.024, pub: out};
    var gbka: dimensionless {init: 0.2, pub: out};
    var gbkab: dimensionless {init: 0.1, pub: out};
    var gcl: nS_per_pF {init: 0.1875, pub: out};
    var gns: nS_per_pF {init: 0.0123, pub: out};
    var PnsK: dimensionless {pub: out};
    var PnsNa: dimensionless {pub: out};
    var PnsCa: dimensionless {pub: out};
    var PnsCs: dimensionless {pub: out};
    var gnsCa: dimensionless {pub: out};
    var gnsNa: dimensionless {pub: out};
    var gnsK: dimensionless {pub: out};
    var gnsCs: dimensionless {pub: out};
    var PK: dimensionless {pub: out};
    var PNa: dimensionless {pub: out};
    var Jpmca: mM_per_msec {pub: out};
    var Kmpmca: mM {pub: out};
    var npmca: dimensionless {pub: out};
    var Jnaca: mM_per_msec {pub: out};
    var Kmallo: mM {pub: out};
    var nallo: dimensionless {pub: out};
    var ksat: dimensionless {pub: out};
    var xgamma: dimensionless {pub: out};
    var Kmnai: mM {pub: out};
    var Kmcai: mM {pub: out};
    var Kmnao: mM {pub: out};
    var Kmcao: mM {pub: out};
    var Fmax: uN {pub: out};
    var FKm: nM {pub: out};
    var Fn: dimensionless {pub: out};
    var vFRT: dimensionless {pub: out};
    var ena: mV {pub: out};
    var ek: mV {pub: out};
    var ecl: mV {pub: out};
    var enscc: mV {pub: out};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    ki = 140.0{mM};
    nai = 4.0{mM};
    cli = 46.0{mM};
    ko = 6.0{mM};
    cao = 2.5{mM};
    nao = 130.0{mM};
    clo = 130.0{mM};
    mgo = 0.5{mM};
    buff = 0.0169{dimensionless};
    AV = 4.0{cm2_per_uL};
    zca = 2.0{dimensionless};
    zna = 1.0{dimensionless};
    zk = 1.0{dimensionless};
    R = 8314.0{joule_per_kelvin_per_kilomole};
    frdy = 96485.0{coulomb_per_mole};
    temp = 308.0{kelvin};
    ecal = 45.0{mV};
    kmca = 0.001{mM};
    ecat = 42.0{mV};
    PnsK = 1.3{dimensionless};
    PnsNa = 0.9{dimensionless};
    PnsCa = 0.89{dimensionless};
    PnsCs = 1.0{dimensionless};
    gnsCa = 0.5{dimensionless};
    gnsNa = 1.0{dimensionless};
    gnsK = 1.19{dimensionless};
    gnsCs = 1.6{dimensionless};
    PK = 1.0{dimensionless};
    PNa = 0.35{dimensionless};
    Jpmca = 0.00000035{mM_per_msec};
    Kmpmca = 0.0005{mM};
    npmca = 2{dimensionless};
    Jnaca = 0.0000035{mM_per_msec};
    Kmallo = 0.0003{mM};
    nallo = 4{dimensionless};
    ksat = 0.27{dimensionless};
    xgamma = 0.35{dimensionless};
    Kmnai = 30.0{mM};
    Kmcai = 0.007{mM};
    Kmnao = 87.5{mM};
    Kmcao = 1.3{mM};
    Fmax = 3.0{uN};
    FKm = 161.301{nM};
    Fn = 3.60205{dimensionless};
    vFRT = v*frdy/(R*temp);
    ena = R*temp/frdy*ln(nao/nai);
    ek = R*temp/frdy*ln(ko/ki);
    ecl = R*temp/frdy*ln(cli/clo);
    enscc = R*temp/frdy*ln((PnsK*ko+PnsNa*nao+4{dimensionless}*PnsCa*cao/(1.0{dimensionless}+exp(vFRT)))/(PnsK*ki+PnsNa*nai+4{dimensionless}*PnsCa*cai/(1.0{dimensionless}+exp(vFRT))));
  enddef;
  // Model - Force and w variable

  def comp Ca_dependent_Force as
    var wss: dimensionless;
    var wtc: msec;
    var conversion: nM_to_mM {init: 1e-6, pub: none};
    var Force: uN;
    var w: dimensionless {init: 0.2345238135343783, pub: none};
    var time: msec {pub: in};
    var cai: mM {pub: in};
    var Fmax: uN {pub: in};
    var FKm: nM {pub: in};
    var Fn: dimensionless {pub: in};
    wss = 1.0{dimensionless}/(1.0{dimensionless}+pow(FKm*conversion/cai, Fn));
    wtc = 4000.0{msec}*(0.234845{dimensionless}+(1.0{dimensionless}-0.234845{dimensionless})/(1.0{dimensionless}+pow(cai/(FKm*conversion), Fn)));
    Force = Fmax*(w-0.2345{dimensionless});
    ode(w, time) = (wss-w)/wtc;
  enddef;
  def map between Ca_dependent_Force and environment for
    vars time and time;
  enddef;
  def map between Ca_dependent_Force and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between Ca_dependent_Force and parameters for
    vars Fmax and Fmax;
    vars FKm and FKm;
    vars Fn and Fn;
  enddef;
  // Model - currents

  def comp I_Na as
    var mss: dimensionless;
    var hss: dimensionless;
    var htc: msec;
    var h: dimensionless {init: 0.404599170710196, pub: none};
    var ina: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ena: mV {pub: in};
    var gna: nS_per_pF {pub: in};
    var P4_ratio: dimensionless {pub: in};
    var E2_ratio: dimensionless {pub: in};
    mss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+35.9584{mV})/9.24013{mV}));
    hss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+57.0{mV})/8.0{mV}));
    htc = 0.9{msec}+1002.85{msec}/(1.0{dimensionless}+sqr((v+47.5{mV})/1.5{mV}));
    ina = E2_ratio*gna/P4_ratio*mss*mss*mss*h*(v-ena);
    ode(h, time) = (hss-h)/htc;
  enddef;
  def map between I_Na and environment for
    vars time and time;
  enddef;
  def map between I_Na and membrane for
    vars v and v;
    vars ina and ina;
    vars E2_ratio and E2_ratio;
    vars P4_ratio and P4_ratio;
  enddef;
  def map between I_Na and parameters for
    vars ena and ena;
    vars gna and gna;
  enddef;
  // Model - currents

  def comp Ca_currents as
    var I_Ca_tot: pA_per_pF {pub: out};
    var time: msec {priv: out, pub: in};
    var v: mV {priv: out, pub: in};
    var ical: pA_per_pF {priv: in};
    var icat: pA_per_pF {priv: in};
    var cai: mM {priv: out, pub: in};
    var ecal: mV {priv: out, pub: in};
    var gcal: nS_per_pF {priv: out, pub: in};
    var kmca: mM {priv: out, pub: in};
    var ecat: mV {priv: out, pub: in};
    var gcat: nS_per_pF {priv: out, pub: in};
    var P4_ratio: dimensionless {priv: out, pub: in};
    var E2_ratio: dimensionless {priv: out, pub: in};
    I_Ca_tot = ical+icat;
  enddef;
  def map between Ca_currents and membrane for
    vars I_Ca_tot and I_Ca_tot;
    vars v and v;
    vars E2_ratio and E2_ratio;
    vars P4_ratio and P4_ratio;
  enddef;
  def map between Ca_currents and environment for
    vars time and time;
  enddef;
  def map between Ca_currents and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between Ca_currents and parameters for
    vars ecal and ecal;
    vars gcal and gcal;
    vars kmca and kmca;
    vars ecat and ecat;
    vars gcat and gcat;
  enddef;
  // Model - currents

  def comp I_CaL as
    var dss: dimensionless;
    var fss: dimensionless;
    var fca: dimensionless;
    var f2tc: msec;
    var f2: dimensionless {init: 0.9065967263076083, pub: none};
    var ical: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ecal: mV {pub: in};
    var gcal: nS_per_pF {pub: in};
    var kmca: mM {pub: in};
    var P4_ratio: dimensionless {pub: in};
    var E2_ratio: dimensionless {pub: in};
    fca = 1.0{dimensionless}/(1.0{dimensionless}+pow(cai/kmca, 4.0{dimensionless}));
    dss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+22.0{mV})/7.0{mV}));
    fss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+38.0{mV})/7.0{mV}));
    f2tc = 90.9699{msec}*(1.0{dimensionless}-1.0{dimensionless}/((1.0{dimensionless}+exp((v+13.9629{mV})/45.3782{mV}))*(1.0{dimensionless}+exp(-(v+9.49866{mV})/3.3945{mV}))));
    ical = P4_ratio*gcal/E2_ratio*fca*dss*dss*(0.8{dimensionless}*fss+0.2{dimensionless}*f2)*(v-ecal);
    ode(f2, time) = (fss-f2)/f2tc;
  enddef;
  def map between I_CaL and Ca_currents for
    vars ical and ical;
    vars v and v;
    vars time and time;
    vars ecal and ecal;
    vars gcal and gcal;
    vars kmca and kmca;
    vars cai and cai;
    vars E2_ratio and E2_ratio;
    vars P4_ratio and P4_ratio;
  enddef;
  // Model - currents

  def comp I_CaT as
    var bss: dimensionless;
    var gss: dimensionless;
    var icat: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ecat: mV {pub: in};
    var gcat: nS_per_pF {pub: in};
    bss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(v+54.23{mV})/9.88{mV}));
    gss = 0.02{dimensionless}+0.98{dimensionless}/(1.0{dimensionless}+exp((v+72.978{mV})/4.64{mV}));
    icat = gcat*bss*bss*gss*(v-ecat);
  enddef;
  def map between I_CaT and Ca_currents for
    vars icat and icat;
    vars v and v;
    vars time and time;
    vars ecat and ecat;
    vars gcat and gcat;
  enddef;
  // Model - currents

  def comp I_b as
    var ib: pA_per_pF {pub: out};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gb: nS_per_pF {pub: in};
    ib = gb*(v-ek);
  enddef;
  def map between I_b and membrane for
    vars v and v;
    vars ib and ib;
  enddef;
  def map between I_b and parameters for
    vars ek and ek;
    vars gb and gb;
  enddef;
  // Model - currents

  def comp K_currents as
    var I_K_tot: pA_per_pF {pub: out};
    var v: mV {priv: out, pub: in};
    var time: msec {priv: out, pub: in};
    var iBKab: pA_per_pF {priv: in};
    var iBKa: pA_per_pF {priv: in};
    var ikv43: pA_per_pF {priv: in};
    var ikv42: pA_per_pF {priv: in};
    var cai: mM {priv: out, pub: in};
    var ek: mV {priv: out, pub: in};
    var gkca: nS_per_pF {priv: out, pub: in};
    var gbka: dimensionless {priv: out, pub: in};
    var R: joule_per_kelvin_per_kilomole {priv: out, pub: in};
    var frdy: coulomb_per_mole {priv: out, pub: in};
    var temp: kelvin {priv: out, pub: in};
    var gbkab: dimensionless {priv: out, pub: in};
    var gkv43: nS_per_pF {priv: out, pub: in};
    var gkv42: nS_per_pF {priv: out, pub: in};
    var P4_ratio: dimensionless {priv: out, pub: in};
    var E2_ratio: dimensionless {priv: out, pub: in};
    I_K_tot = iBKab+iBKa+ikv43+ikv42;
  enddef;
  def map between K_currents and environment for
    vars time and time;
  enddef;
  def map between K_currents and membrane for
    vars I_K_tot and I_K_tot;
    vars v and v;
    vars E2_ratio and E2_ratio;
    vars P4_ratio and P4_ratio;
  enddef;
  def map between K_currents and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between K_currents and parameters for
    vars ek and ek;
    vars gkca and gkca;
    vars gbkab and gbkab;
    vars gbka and gbka;
    vars gkv43 and gkv43;
    vars gkv42 and gkv42;
    vars R and R;
    vars frdy and frdy;
    vars temp and temp;
  enddef;
  // Model - currents

  def comp I_Kv43 as
    var qss: dimensionless;
    var rss: dimensionless;
    var qtc: msec;
    var r1tc: msec;
    var r2tc: msec;
    var q: dimensionless {init: 0.2060363247740295, pub: none};
    var r1: dimensionless {init: 0.1922244113609531, pub: none};
    var r2: dimensionless {init: 0.1932803618375963, pub: none};
    var ikv43: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gkv43: nS_per_pF {pub: in};
    var P4_ratio: dimensionless {pub: in};
    var E2_ratio: dimensionless {pub: in};
    qss = 0.978613{dimensionless}/(1.0{dimensionless}+exp(-(v+18.6736{mV})/26.6606{mV}));
    rss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+63.0{mV})/6.3{mV}));
    qtc = 500.0{msec}/(1.0{dimensionless}+sqr((v+60.71{mV})/15.79{mV}));
    r1tc = 5000.0{msec}/(1.0{dimensionless}+sqr((v+62.7133{mV})/35.8611{mV}));
    r2tc = 30000.0{msec}+220000.0{msec}/(1.0{dimensionless}+exp((v+22.0{mV})/4.0{mV}));
    ikv43 = E2_ratio*gkv43*q*q*(0.38{dimensionless}*r1+0.63{dimensionless}*r2)*(v-ek);
    ode(q, time) = (qss-q)/qtc;
    ode(r1, time) = (rss-r1)/r1tc;
    ode(r2, time) = (rss-r2)/r2tc;
  enddef;
  def map between I_Kv43 and K_currents for
    vars ikv43 and ikv43;
    vars v and v;
    vars time and time;
    vars ek and ek;
    vars gkv43 and gkv43;
    vars E2_ratio and E2_ratio;
    vars P4_ratio and P4_ratio;
  enddef;
  // Model - currents

  def comp I_Kv42 as
    var pss: dimensionless {pub: none};
    var kss: dimensionless {pub: none};
    var ptc: msec {pub: none};
    var k1tc: msec {pub: none};
    var k2tc: msec {pub: none};
    var p: dimensionless {init: 0.1174074734567931, pub: none};
    var k1: dimensionless {init: 0.9968385770271651, pub: none};
    var k2: dimensionless {init: 0.9968408069904307, pub: none};
    var ikv42: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var ek: mV {pub: in};
    var gkv42: nS_per_pF {pub: in};
    var P4_ratio: dimensionless {pub: in};
    var E2_ratio: dimensionless {pub: in};
    pss = 0.948{dimensionless}/(1.0{dimensionless}+exp(-(v+17.91{mV})/18.4{mV}));
    kss = 1.0{dimensionless}/(1.0{dimensionless}+exp((v+21.2{mV})/5.7{mV}));
    ptc = 100.0{msec}/(1.0{dimensionless}+sqr((v+64.1{mV})/28.67{mV}));
    k1tc = 1000000.0{msec}*(1.0{dimensionless}-1.0{dimensionless}/((1.0{dimensionless}+exp((v-315.0{mV})/50.0{mV}))*(1.0{dimensionless}+exp(-(v+74.9{mV})/8.0{mV}))));
    k2tc = 2500000.0{msec}*(1.0{dimensionless}-1.0{dimensionless}/((1.0{dimensionless}+exp((v-132.868{mV})/25.3992{mV}))*(1.0{dimensionless}+exp(-(v+24.9203{mV})/2.67915{mV}))));
    ikv42 = E2_ratio*gkv42*p*p*(0.75{dimensionless}*k1+0.25{dimensionless}*k2)*(v-ek);
    ode(p, time) = (pss-p)/ptc;
    ode(k1, time) = (kss-k1)/k1tc;
    ode(k2, time) = (kss-k2)/k2tc;
  enddef;
  def map between I_Kv42 and K_currents for
    vars time and time;
    vars v and v;
    vars ikv42 and ikv42;
    vars ek and ek;
    vars gkv42 and gkv42;
    vars E2_ratio and E2_ratio;
    vars P4_ratio and P4_ratio;
  enddef;
  // Model - currents

  def comp I_BKa as
    var xass_z: dimensionless;
    var xass_vh: mV;
    var conversion: mM_to_M {init: 1000.0, pub: none};
    var xass: dimensionless;
    var iBKa: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ek: mV {pub: in};
    var gkca: nS_per_pF {pub: in};
    var gbka: dimensionless {pub: in};
    var R: joule_per_kelvin_per_kilomole {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var temp: kelvin {pub: in};
    var P4_ratio: dimensionless {pub: in};
    var E2_ratio: dimensionless {pub: in};
    xass_z = -0.749234{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion-0.0630535{mole})/0.161942{mole}))+8.38384{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion+1538.29{mole})/739.057{mole}));
    xass_vh = 5011.47{mV}/(1.0{dimensionless}+pow((cai*conversion+0.237503{mole})/0.000239278{mole}, 0.42291{dimensionless}))-37.5137{mV};
    xass = 1.0{dimensionless}/(1.0{dimensionless}+exp(-xass_z*frdy*(v-xass_vh)/(R*temp)));
    iBKa = E2_ratio*gkca*gbka*xass*(v-ek);
  enddef;
  def map between I_BKa and K_currents for
    vars iBKa and iBKa;
    vars v and v;
    vars time and time;
    vars ek and ek;
    vars gkca and gkca;
    vars gbka and gbka;
    vars R and R;
    vars frdy and frdy;
    vars temp and temp;
    vars cai and cai;
    vars E2_ratio and E2_ratio;
    vars P4_ratio and P4_ratio;
  enddef;
  // Model - currents

  def comp I_BKab as
    var xabss_z: dimensionless;
    var xabss_vh: mV;
    var conversion: mM_to_M {init: 1000.0, pub: none};
    var xabss: dimensionless;
    var iBKab: pA_per_pF {pub: out};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ek: mV {pub: in};
    var gkca: nS_per_pF {pub: in};
    var gbkab: dimensionless {pub: in};
    var R: joule_per_kelvin_per_kilomole {pub: in};
    var frdy: coulomb_per_mole {pub: in};
    var temp: kelvin {pub: in};
    var P4_ratio: dimensionless {pub: in};
    var E2_ratio: dimensionless {pub: in};
    xabss_z = -0.681249{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion-0.218988{mole})/0.428335{mole}))+1.40001{dimensionless}/(1.0{dimensionless}+sqr((cai*conversion+228.71{mole})/684.946{mole}));
    xabss_vh = 8540.23{mV}/(1.0{dimensionless}+pow((cai*conversion+0.401189{mole})/0.00399115{mole}, 0.668054{dimensionless}))-109.275{mV};
    xabss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-xabss_z*frdy*(v-xabss_vh)/(R*temp)));
    iBKab = E2_ratio*gkca*gbkab*xabss*(v-ek);
  enddef;
  def map between I_BKab and K_currents for
    vars iBKab and iBKab;
    vars v and v;
    vars ek and ek;
    vars gkca and gkca;
    vars gbkab and gbkab;
    vars R and R;
    vars frdy and frdy;
    vars temp and temp;
    vars cai and cai;
    vars E2_ratio and E2_ratio;
    vars P4_ratio and P4_ratio;
  enddef;
  // Model - currents

  def comp I_Cl as
    var css: dimensionless;
    var ctc: msec;
    var K1cl: mM;
    var K2cl: dimensionless;
    var c: dimensionless {init: 0.0003764413740731269, pub: none};
    var icl: pA_per_pF {pub: out};
    var time: msec {pub: in};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var ecl: mV {pub: in};
    var gcl: nS_per_pF {pub: in};
    var vFRT: dimensionless {pub: in};
    K1cl = 0.0006{mM}*exp(2.53{dimensionless}*vFRT);
    K2cl = 0.1{dimensionless}*exp(-5.0{dimensionless}*vFRT);
    css = 1.0{dimensionless}/(1.0{dimensionless}+K2cl*(sqr(K1cl/cai)+K1cl/cai+1.0{dimensionless}));
    ctc = -160.0{msec}+210.0{msec}/(1.0{dimensionless}+exp((v+4.56{mV})/11.62{mV}))+170.0{msec}/(1.0{dimensionless}+exp(-(v+25.5{mV})/11.62{mV}));
    icl = gcl*c*(v-ecl);
    ode(c, time) = (css-c)/ctc;
  enddef;
  def map between I_Cl and environment for
    vars time and time;
  enddef;
  def map between I_Cl and membrane for
    vars v and v;
    vars icl and icl;
  enddef;
  def map between I_Cl and Ca_Concentrations for
    vars cai and cai;
  enddef;
  def map between I_Cl and parameters for
    vars ecl and ecl;
    vars gcl and gcl;
    vars vFRT and vFRT;
  enddef;
  // Model - currents

  def comp NS_currents as
    var fmg: dimensionless {priv: out};
    var tinyamount: mM {init: 1e-8, priv: out};
    var I_NS_tot: pA_per_pF {pub: out};
    var insna: pA_per_pF {priv: in};
    var insca: pA_per_pF {priv: in, pub: out};
    var insk: pA_per_pF {priv: in};
    var v: mV {priv: out, pub: in};
    var enscc: mV {priv: out, pub: in};
    var mgo: mM {pub: in};
    var gns: nS_per_pF {priv: out, pub: in};
    var gnsNa: dimensionless {priv: out, pub: in};
    var nao: mM {priv: out, pub: in};
    var ko: mM {priv: out, pub: in};
    var gnsK: dimensionless {priv: out, pub: in};
    var cao: mM {priv: out, pub: in};
    var gnsCa: dimensionless {priv: out, pub: in};
    fmg = 0.108043{dimensionless}+0.903902{dimensionless}/(1.0{dimensionless}+pow(mgo/0.281007{mM}, 1.29834{dimensionless}));
    I_NS_tot = insca+insk+insna;
  enddef;
  def map between NS_currents and membrane for
    vars v and v;
    vars I_NS_tot and I_NS_tot;
  enddef;
  def map between NS_currents and parameters for
    vars enscc and enscc;
    vars gns and gns;
    vars mgo and mgo;
    vars gnsNa and gnsNa;
    vars nao and nao;
    vars gnsK and gnsK;
    vars ko and ko;
    vars gnsCa and gnsCa;
    vars cao and cao;
  enddef;

  def comp I_NSNa as
    var fmg: dimensionless {pub: in};
    var tinyamount: mM {pub: in};
    var v: mV {pub: in};
    var nao: mM {pub: in};
    var gs_nao: dimensionless;
    var gnsNa: dimensionless {pub: in};
    var gns: nS_per_pF {pub: in};
    var enscc: mV {pub: in};
    var insna: pA_per_pF {pub: out};
    gs_nao = 1{dimensionless}/0.0123{dimensionless}*0.03{dimensionless}/(1.0{dimensionless}+sqr(150.0{mM}/(nao+tinyamount)));
    insna = fmg*gs_nao*gnsNa*gns*(v-enscc);
  enddef;
  def map between NS_currents and I_NSNa for
    vars insna and insna;
    vars fmg and fmg;
    vars tinyamount and tinyamount;
    vars v and v;
    vars enscc and enscc;
    vars gns and gns;
    vars gnsNa and gnsNa;
    vars nao and nao;
  enddef;

  def comp I_NSK as
    var fmg: dimensionless {pub: in};
    var tinyamount: mM {pub: in};
    var v: mV {pub: in};
    var ko: mM {pub: in};
    var gs_ko: dimensionless;
    var gnsK: dimensionless {pub: in};
    var gns: nS_per_pF {pub: in};
    var enscc: mV {pub: in};
    var insk: pA_per_pF {pub: out};
    gs_ko = 1{dimensionless}/0.0123{dimensionless}*0.03{dimensionless}/(1.0{dimensionless}+sqr(150.0{mM}/(ko+tinyamount)));
    insk = fmg*gs_ko*gnsK*gns*(v-enscc);
  enddef;
  def map between NS_currents and I_NSK for
    vars insk and insk;
    vars fmg and fmg;
    vars tinyamount and tinyamount;
    vars v and v;
    vars enscc and enscc;
    vars gns and gns;
    vars gnsK and gnsK;
    vars ko and ko;
  enddef;

  def comp I_NSCa as
    var fmg: dimensionless {pub: in};
    var tinyamount: mM {pub: in};
    var v: mV {pub: in};
    var cao: mM {pub: in};
    var gs_cao: dimensionless;
    var gnsCa: dimensionless {pub: in};
    var gns: nS_per_pF {pub: in};
    var enscc: mV {pub: in};
    var insca: pA_per_pF {pub: out};
    gs_cao = 1{dimensionless}/0.000525{dimensionless}*0.03{dimensionless}/(1.0{dimensionless}+sqr(150.0{mM}/(cao+tinyamount)));
    insca = fmg*gs_cao*gnsCa*gns*(v-enscc);
  enddef;
  def map between NS_currents and I_NSCa for
    vars insca and insca;
    vars fmg and fmg;
    vars tinyamount and tinyamount;
    vars v and v;
    vars enscc and enscc;
    vars gns and gns;
    vars gnsCa and gnsCa;
    vars cao and cao;
  enddef;
  // Model - flux

  def comp J_NaCa as
    var f1naca: dimensionless;
    var f2naca: dimensionless;
    var fallo: dimensionless;
    var naca_Eup: mM4;
    var naca_Ed1: dimensionless;
    var naca_Ed2: mM4;
    var naca_Ed3: mM4;
    var jnaca_sign: dimensionless {init: -1, pub: none};
    var jnaca: mM_per_msec {pub: out};
    var v: mV {pub: in};
    var cai: mM {pub: in};
    var cao: mM {pub: in};
    var nao: mM {pub: in};
    var nai: mM {pub: in};
    var Jnaca: mM_per_msec {pub: in};
    var Kmallo: mM {pub: in};
    var nallo: dimensionless {pub: in};
    var ksat: dimensionless {pub: in};
    var xgamma: dimensionless {pub: in};
    var Kmnai: mM {pub: in};
    var Kmcai: mM {pub: in};
    var Kmnao: mM {pub: in};
    var Kmcao: mM {pub: in};
    var vFRT: dimensionless {pub: in};
    f1naca = exp((xgamma-1.0{dimensionless})*vFRT);
    f2naca = exp(xgamma*vFRT);
    fallo = 1.0{dimensionless}/(1.0{dimensionless}+pow(Kmallo/cai, nallo));
    naca_Eup = pow(nai, 3{dimensionless})*cao*f2naca-pow(nao, 3{dimensionless})*cai*f1naca;
    naca_Ed1 = 1.0{dimensionless}+ksat*f1naca;
    naca_Ed2 = Kmcao*pow(nai, 3{dimensionless})+pow(Kmnao, 3{dimensionless})*cai+pow(Kmnai, 3{dimensionless})*cao*(1.0{dimensionless}+cai/Kmcai);
    naca_Ed3 = cao*pow(nai, 3{dimensionless})+pow(nao, 3{dimensionless})*cai+pow(nao, 3{dimensionless})*Kmcai*(1.0{dimensionless}+pow(nai/Kmnai, 3{dimensionless}));
    jnaca = jnaca_sign*Jnaca*fallo*naca_Eup/(naca_Ed1*(naca_Ed2+naca_Ed3));
  enddef;
  def map between J_NaCa and membrane for
    vars v and v;
  enddef;
  def map between J_NaCa and Ca_Concentrations for
    vars cai and cai;
    vars jnaca and jnaca;
  enddef;
  def map between J_NaCa and parameters for
    vars nao and nao;
    vars nai and nai;
    vars cao and cao;
    vars Jnaca and Jnaca;
    vars Kmallo and Kmallo;
    vars nallo and nallo;
    vars ksat and ksat;
    vars xgamma and xgamma;
    vars Kmnai and Kmnai;
    vars Kmcai and Kmcai;
    vars Kmnao and Kmnao;
    vars Kmcao and Kmcao;
    vars vFRT and vFRT;
  enddef;
  // Model - flux

  def comp J_PMCA as
    var jpmca: mM_per_msec {pub: out};
    var cai: mM {pub: in};
    var Jpmca: mM_per_msec {pub: in};
    var Kmpmca: mM {pub: in};
    var npmca: dimensionless {pub: in};
    jpmca = Jpmca/(1.0{dimensionless}+pow(Kmpmca/cai, npmca));
  enddef;
  def map between J_PMCA and Ca_Concentrations for
    vars cai and cai;
    vars jpmca and jpmca;
  enddef;
  def map between J_PMCA and parameters for
    vars Jpmca and Jpmca;
    vars Kmpmca and Kmpmca;
    vars npmca and npmca;
  enddef;
  // Model - Group

  def group as containment for
    comp membrane incl
      comp I_b;
      comp I_Na;
      comp I_Cl;
      comp NS_currents incl
        comp I_NSCa;
        comp I_NSK;
        comp I_NSNa;
      endcomp;
      comp Ca_currents incl
        comp I_CaT;
        comp I_CaL;
      endcomp;
      comp K_currents incl
        comp I_BKa;
        comp I_BKab;
        comp I_Kv43;
        comp I_Kv42;
      endcomp;
    endcomp;
  enddef;

  def group as encapsulation for
    comp Ca_currents incl
      comp I_CaT;
      comp I_CaL;
    endcomp;
    comp NS_currents incl
      comp I_NSCa;
      comp I_NSK;
      comp I_NSNa;
    endcomp;
    comp K_currents incl
      comp I_Kv43;
      comp I_BKa;
      comp I_BKab;
      comp I_Kv42;
    endcomp;
  enddef;
enddef;
